PsychoPy2experiment version="3.1.3"
Settings
  Experiment info = {'participant': '', 'session': '003'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = EmotionSession
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Routines
  Routine Blank_Screen
    TextComponent text_blank
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Emotion_Screen
    TextComponent text_emotion_screen_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Session Three:
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    TextComponent text_emotion_screen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Visual Stimulation
                  Test
    CodeComponent code_emotion_screen
      Code Type = Py
      Begin Experiment:
        import time
        thisExp.addData("start_session_three", time.strftime("%Y-%m-%d_%H:%M:%S"))
      End Experiment:
        thisExp.addData("end_session_three", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Emotion_End
    TextComponent text_ending_screen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = The End
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    TextComponent text_ending_subtitle
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating!
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  Routine Cooldown_Measurement
    TextComponent text_cooldown_measurement
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = +
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    CodeComponent code_cooldown_measurement
      Code Type = Py
      Begin Routine:
        thisExp.addData("start_cooldown_measurement", time.strftime("%Y-%m-%d_%H:%M:%S"))
      End Routine:
        thisExp.addData("end_cooldown_measurement", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Countdown_Screen_10
    TextComponent text_countdown
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(round(routineTimer.getTime(),0)) 
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  Routine Cooldown_Instructions
    TextComponent text_cooldown_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please try to relax as much as possible.

        When you are ready please tell your instructor to start the measurement.
    TextComponent text_cooldown_instructions_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    KeyboardComponent key_resp_cooldown_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine Cooldown_Screen
    TextComponent text_cooldown_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Intermission:
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    TextComponent text_cooldown
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Cooldown Phase
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  Routine Cooldown_Evaluation
    TextComponent text_cooldown_evaluation_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Task finished:
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    TextComponent text_cooldown_evaluation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please select the feeling closest to your current emotional state.
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    RatingScaleComponent rating_cooldown_evaluation
      forceEndRoutine = True
      high = 6
      low = 1
      pos = 0, -0.4
      saveStartStop = False
      scaleDescription = sad, disgusted, bored, suprised, pleasant, happy
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Emotion_Evaluation_N_O
    ImageComponent image_emotion_n_eval_o
      image [set every repeat] = $n_pictures
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = $(n_new_width*0.3, n_new_height*0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_emotion_n_eval_o
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the intensity of the picture.
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    RatingScaleComponent rating_emotion_n_eval_o
      forceEndRoutine = True
      high = 10
      labels = very weak (low), very strong (high)
      low = 1
      markerStart = 5
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Emotion_Evaluation_N_T
    ImageComponent image_emotion_n_eval_t
      image [set every repeat] = $n_pictures
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = $(n_new_width*0.3, n_new_height*0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_emotion_n_eval_t
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = please rate the feeling of the picture.
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    RatingScaleComponent rating_emotion_n_eval_t
      forceEndRoutine = True
      high = 7
      labels = very negative, very positive
      low = 1
      markerStart = 3
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Fix_Screen
    TextComponent text_fix
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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  Routine Emotion_Measurement_N
    ImageComponent image_emotion_n
      image [set every repeat] = $n_pictures
      size [set every repeat] = $(n_new_width, n_new_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine Part_Two
    TextComponent text_part_two_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Part Two:
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    TextComponent text_part_two
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Negative
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  Routine Cooldown_End
    TextComponent text_cooldown_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Intermission
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    TextComponent text_cooldown_end_instructions
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'SPACE' to continue)
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    KeyboardComponent key_resp_cooldown_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Emotion_Evaluation_P_T
    ImageComponent image_emotion_p_eval_t
      image [set every repeat] = $p_pictures
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = $(p_new_width*0.3, p_new_height*0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_emotion_p_eval_t
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the feeling of the picture.
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    RatingScaleComponent rating_emotion_p_eval_t
      forceEndRoutine = True
      high = 7
      labels = very negative, very positive
      low = 1
      markerStart = 5
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Emotion_Evaluation_P_O
    ImageComponent image_emotion_p_eval_o
      image [set every repeat] = $p_pictures
      pos = (0, 0.2)
      saveStartStop = False
      size [set every repeat] = $(p_new_width*0.3, p_new_height*0.3)
      startVal [time (s)] = 0.0
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    TextComponent text_emotion_p_eval_o
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the intensity of the picture.
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    RatingScaleComponent rating_emotion_p_eval_o
      forceEndRoutine = True
      high = 10
      labels = very weak (low), very strong (high)
      low = 1
      markerStart = 5
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Emotion_Measurement_P
    ImageComponent image_emotion_p
      image [set every repeat] = $p_pictures
      size [set every repeat] = $(p_new_width, p_new_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine Emotion_Instructions
    TextComponent text_emotion_instruction_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_emotion_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please focus on the following
        pictures.

        You will have to rate each picture
        after it has been presented.

        When you are ready please tell your instructor to start the measurement.
    KeyboardComponent key_resp_emotion_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_part_one_start
      Code Type = Py
      End Routine:
        thisExp.addData("start_emotion_one", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Part_One
    TextComponent text_part_one_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Part One:
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    TextComponent text_part_one
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Positive
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  Routine Part_One_Meas_End
    TextComponent text_part_one_meas_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_part_one_end
      Code Type = Py
      Begin Routine:
        thisExp.addData("end_emotion_one", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Emotion_Instructions_Two
    TextComponent text_emotion_instruction_title_2
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_emotion_instructions_2
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please focus on the following
        pictures.

        You will have to rate each picture
        after it has been presented.

        When you are ready please tell your instructor to start the measurement.
    KeyboardComponent key_resp_emotion_instructions_2
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_part_two_start_2
      Code Type = Py
      End Routine:
        thisExp.addData("start_emotion_two", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Part_Two_Meas_End
    TextComponent text_part_one_meas_end_2
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_part_two_end_2
      Code Type = Py
      Begin Routine:
        thisExp.addData("end_emotion_two", time.strftime("%Y-%m-%d_%H:%M:%S"))
Flow
  Routine Emotion_Screen
  Routine Blank_Screen
  Routine Part_One
  Routine Blank_Screen
  Routine Emotion_Instructions
  Routine Blank_Screen
  LoopInitiator emotion_trials_p loopType="TrialHandler"
    conditionsFile = ..\Resources\StimuliFiles\picture_list_pos.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1440), ('p_description', 'seal'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1440.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')]),
      OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1460), ('p_description', 'tiger cub'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1460.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')]),
      OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1463), ('p_description', 'group of cats'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1463.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')]),
      OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1710), ('p_description', 'three dogs'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1710.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')])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
    Routine Emotion_Measurement_P
    Routine Blank_Screen
    Routine Fix_Screen
    Routine Blank_Screen
  LoopTerminator emotion_trials_p
  Routine Part_One_Meas_End
  LoopInitiator emotion_evaluation_p loopType="TrialHandler"
    conditionsFile = ..\Resources\StimuliFiles\picture_list_pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1440), ('p_description', 'seal'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1440.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')]),
      OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1460), ('p_description', 'tiger cub'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1460.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')]),
      OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1463), ('p_description', 'group of cats'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1463.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')]),
      OrderedDict([('p_path', 'Resources\\Pictures\\'), ('p_weight', 'Positive\\'), ('p_name', 1710), ('p_description', 'three dogs'), ('p_type', '.jpg'), ('p_pictures', 'Resources\\Pictures\\Positive\\1710.jpg'), ('p_pic_width', 1024), ('p_pic_height', 768), ('p_new_width', 1.9), ('p_new_height', 1), ('p_new_size', '(1.9, 1)')])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
    Routine Emotion_Evaluation_P_O
    Routine Blank_Screen
    Routine Emotion_Evaluation_P_T
    Routine Blank_Screen
  LoopTerminator emotion_evaluation_p
  Routine Blank_Screen
  Routine Cooldown_Screen
  Routine Blank_Screen
  Routine Cooldown_Instructions
  Routine Blank_Screen
  Routine Countdown_Screen_10
  Routine Blank_Screen
  Routine Cooldown_Measurement
  Routine Blank_Screen
  Routine Cooldown_Evaluation
  Routine Blank_Screen
  Routine Cooldown_End
  Routine Blank_Screen
  Routine Part_Two
  Routine Blank_Screen
  Routine Emotion_Instructions_Two
  Routine Blank_Screen
  LoopInitiator emotion_trials_n loopType="TrialHandler"
    conditionsFile = ..\Resources\StimuliFiles\picture_list_neg.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1022.0), ('n_description', 'snake close up'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1022.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')]),
      OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1240.0), ('n_description', 'spider'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1240.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')]),
      OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1300.0), ('n_description', 'dog threat 1'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1300.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')]),
      OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1302.0), ('n_description', ' dog threat 2'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1302.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')])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
    Routine Emotion_Measurement_N
    Routine Blank_Screen
    Routine Fix_Screen
    Routine Blank_Screen
  LoopTerminator emotion_trials_n
  Routine Part_Two_Meas_End
  LoopInitiator emotion_evaluation_n loopType="TrialHandler"
    conditionsFile = ..\Resources\StimuliFiles\picture_list_neg.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1022.0), ('n_description', 'snake close up'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1022.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')]),
      OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1240.0), ('n_description', 'spider'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1240.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')]),
      OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1300.0), ('n_description', 'dog threat 1'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1300.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')]),
      OrderedDict([('n_path', 'Resources\\Pictures\\'), ('n_weight', 'Negative\\'), ('n_name', 1302.0), ('n_description', ' dog threat 2'), ('n_type', '.jpg'), ('n_pictures', 'Resources\\Pictures\\Negative\\1302.jpg'), ('n_pic_width', 1024), ('n_pic_height', 768), ('n_new_width', 1.9), ('n_new_height', 1), ('n_new_size', '(1.9, 1)')])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
    Routine Emotion_Evaluation_N_O
    Routine Blank_Screen
    Routine Emotion_Evaluation_N_T
    Routine Blank_Screen
  LoopTerminator emotion_evaluation_n
  Routine Blank_Screen
  Routine Cooldown_Screen
  Routine Blank_Screen
  Routine Cooldown_Instructions
  Routine Blank_Screen
  Routine Countdown_Screen_10
  Routine Blank_Screen
  Routine Cooldown_Measurement
  Routine Blank_Screen
  Routine Cooldown_Evaluation
  Routine Blank_Screen
  Routine Emotion_End
