PsychoPy2experiment version="3.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = StartingSession
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Routines
  Routine Welcome_Screen
    TextComponent text_welcome_screen
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
          Welcome
             to the
        Experiment
    TextComponent text_welcome_screen_continue
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'SPACE' to continue)
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    KeyboardComponent key_resp_welcome_screen
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_welcome_screen
      Code Type = Py
      Begin Experiment:
        import time
        thisExp.addData("start_session_one", time.strftime("%Y-%m-%d_%H:%M:%S"))
      End Experiment:
        thisExp.addData("end_session_one", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Blank_Screen
    TextComponent text_blank_screen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Baseline_Screen
    TextComponent text_baseline_screen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
            Baseline
        Measurement
    TextComponent text_baseline_screen_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Session One:
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  Routine Baseline_Instructions
    TextComponent text_baseline_instructions_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_baseline_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please try to relax as much as possible.

        When you are ready please tell your instructor to start the measurement.
    KeyboardComponent key_resp_baseline_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Countdown_Screen_10
    TextComponent text_countdown
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(round(routineTimer.getTime(),0)) 
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  Routine Baseline_Measurement
    TextComponent text_baseline_measurement
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = +
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    CodeComponent code_baseline_measurement
      Code Type = Py
      Begin Routine:
        thisExp.addData("start_baseline_measurement", time.strftime("%Y-%m-%d_%H:%M:%S"))
      End Routine:
        thisExp.addData("end_baseline_measurement", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Baseline_Evaluation
    TextComponent text_baseline_evaluation_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Task finished:
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    TextComponent text_baseline_evaluation
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate your current stress level.
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    RatingScaleComponent rating_baseline
      forceEndRoutine = True
      high = 10
      labels = completely relaxed, stressed out
      low = 1
      markerStart = 5
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Baseline_End
    TextComponent text_baseline_end
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Session One.
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    TextComponent text_baseline_end_instructions
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'SPACE' to exit)
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    KeyboardComponent key_resp_baseline_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine Welcome_Screen
  Routine Blank_Screen
  Routine Baseline_Screen
  Routine Blank_Screen
  Routine Baseline_Instructions
  Routine Blank_Screen
  Routine Countdown_Screen_10
  Routine Blank_Screen
  Routine Baseline_Measurement
  Routine Blank_Screen
  Routine Baseline_Evaluation
  Routine Blank_Screen
  Routine Baseline_End
