PsychoPy2experiment version="3.1.3"
Settings
  Experiment info = {'participant': '', 'session': '002'}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  expName = StressSession
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Routines
  Routine Blank_Screen
    TextComponent text_blank
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stress_Screen
    TextComponent text_stress_screen_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Session Two:
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    TextComponent text_stress_screen
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Stress Test
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    CodeComponent code_stress_screen
      Code Type = Py
      Begin Experiment:
        import time
        thisExp.addData("start_session_two", time.strftime("%Y-%m-%d_%H:%M:%S"))
      End Experiment:
        thisExp.addData("end_session_two", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Part_One_Instructions
    TextComponent text_part_one_instructions_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_part_one_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Count down aloud from 700 in steps of 7 while trying to match the speed of the metronome dot.

        When you are ready please tell your instructor to start the measurement.
    KeyboardComponent key_resp_part_one_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_part_one_start
      Code Type = Py
      End Routine:
        thisExp.addData("start_stress_one", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Part_One
    TextComponent text_part_one_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Part One:
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    TextComponent text_part_one
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = 7-Row
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  Routine Part_One_Measurement
    PolygonComponent metronome_dot
      fillColor [set every repeat] = $Color
      lineColor = black
      nVertices = 32
      saveStartStop = False
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent metronome_tone
      saveStartStop = False
      sound [set every repeat] = $Tone
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume = 0.5
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  Routine Metronome_Tick
    TextComponent text_metronom_tick
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $TimeDur
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  Routine Stress_Evaluation_One
    TextComponent text_evaluation_one_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Task finished:
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    TextComponent text_evaluation_one
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate your current stress level.
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    RatingScaleComponent rating_evaluation_one
      forceEndRoutine = True
      high = 10
      labels = completely relaxed, stressed out
      low = 1
      markerStart = 5
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Stress_Evaluation_Two
    TextComponent text_evaluation_two
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please rate the difficulty of the task.
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    RatingScaleComponent rating_evaluation_two
      forceEndRoutine = True
      high = 10
      labels = very easy, easy, hard, very hard
      low = 1
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Part_Two
    TextComponent text_part_two_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Part Two
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    TextComponent text_part_two
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Stroop Test
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  Routine Part_One_Meas_Stop
    TextComponent text_part_one_meas_stop
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_part_one_end
      Code Type = Py
      Begin Routine:
        thisExp.addData("end_stress_one", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Part_One_End
    TextComponent text_part_one_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Part One
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    TextComponent text_part_one_end_instructions
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'SPACE' to continue)
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    KeyboardComponent key_resp_part_one_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Part_Two_Instructions
    TextComponent text_part_two_instructions_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_part_two_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Select the color of the word by using the arrow keys [left, right].

        When you are ready please tell your instructor to start the measurement.
    KeyboardComponent key_resp_part_two_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Color_Instructions
    TextComponent text_color_instructions
      letterHeight = 0.05
      pos = (0, 0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Stroop Colors
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    PolygonComponent rec_red
      fillColor = red
      lineColor = black
      pos = (-0.8, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_red
      letterHeight = 0.05
      pos = (-0.8, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = red
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    PolygonComponent rec_magenta
      fillColor = magenta
      lineColor = black
      pos = (-0.6, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_magenta
      letterHeight = 0.05
      pos = (-0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = magenta
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    PolygonComponent rec_orange
      fillColor = orange
      lineColor = black
      pos = (-0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_orange
      letterHeight = 0.05
      pos = (-0.4, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = orange
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    PolygonComponent rec_yellow
      fillColor = yellow
      lineColor = black
      pos = (-0.2, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_yellow
      letterHeight = 0.05
      pos = (-0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = yellow
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    PolygonComponent rec_green
      fillColor = green
      lineColor = black
      pos = (0, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_green
      letterHeight = 0.05
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = green
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    PolygonComponent rec_cyan
      fillColor = cyan
      lineColor = black
      pos = (0.2, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_cyan
      letterHeight = 0.05
      pos = (0.2, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = cyan
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    PolygonComponent rec_blue
      fillColor = blue
      lineColor = black
      pos = (0.4, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_blue
      letterHeight = 0.05
      pos = (0.4, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = blue
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    PolygonComponent rec_purple
      fillColor = purple
      lineColor = black
      pos = (0.6, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_purple
      letterHeight = 0.05
      pos = (0.6, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = purple
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    PolygonComponent rec_brown
      fillColor = brown
      lineColor = black
      pos = (0.8, 0.2)
      saveStartStop = False
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_brown
      letterHeight = 0.05
      pos = (0.8, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = brown
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    TextComponent text_continue
      letterHeight = 0.05
      pos = (0, -0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Please let your instructor know when you are ready to start the measurement.
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    KeyboardComponent key_resp_color_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent code_part_two_start
      Code Type = Py
      End Routine:
        thisExp.addData("start_stress_two", time.strftime("%Y-%m-%d_%H:%M:%S"))
    TextComponent text_example_middle
      color = red
      letterHeight = 0.075
      pos = (0, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = blue
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    TextComponent text_example_left_ans
      letterHeight = 0.075
      pos = (-0.3, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = blue
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    TextComponent text_example_right_ans
      letterHeight = 0.075
      pos = (0.3, -0.15)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = red
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    TextComponent text_example
      letterHeight = 0.05
      pos = (0, -0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Stroop Example
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  Routine Part_Two_Measurement
    TextComponent text_word_item
      color [set every repeat] = $WordColor
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    TextComponent text_left_ans
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (-0.55, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $AnsLeft
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    TextComponent text_right_ans
      color [set every repeat] = white
      letterHeight = 0.1
      pos = (0.55, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $AnsRight
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    KeyboardComponent key_resp_part_two_meas
      allowedKeys = 'left','right'
      correctAns = $AnsCorr
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Part_Two_Meas_Stop
    TextComponent text_part_two_meas_stop
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    CodeComponent code_part_two_end
      Code Type = Py
      Begin Routine:
        thisExp.addData("end_stress_two", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Part_Two_End
    TextComponent text_part_two_end
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Part Two
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    TextComponent text_part_two_end_instructions
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'SPACE' to continue)
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    KeyboardComponent key_resp_part_two_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Cooldown_Instructions
    TextComponent text_cooldown_instructions
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please try to relax as much as possible.

        When you are ready please tell your instructor to start the measurement.
    TextComponent text_cooldown_instructions_title
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    KeyboardComponent key_resp_cooldown_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Cooldown_Measurement
    TextComponent text_cooldown_measurement
      letterHeight = 0.4
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 300
      text = +
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    CodeComponent code_cooldown_measurement
      Code Type = Py
      Begin Routine:
        thisExp.addData("start_cooldown_measurement", time.strftime("%Y-%m-%d_%H:%M:%S"))
      End Routine:
        thisExp.addData("end_cooldown_measurement", time.strftime("%Y-%m-%d_%H:%M:%S"))
  Routine Stress_End
    TextComponent text_stress_end
      letterHeight = 0.1
      pos = (0, 0.1)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Session Two
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    TextComponent text_stress_end_instructions
      letterHeight = 0.04
      pos = (0, -0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'SPACE' to exit)
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    KeyboardComponent key_resp_stress_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Cooldown_Screen
    TextComponent text_cooldown_title
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Intermission:
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    TextComponent text_cooldown
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Cooldown Phase
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  Routine Countdown_Screen_10
    TextComponent text_countdown
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text [set every frame] = $str(round(routineTimer.getTime(),0)) 
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  Routine te
    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    SoundComponent sound_2
      sound = 660
      startVal [time (s)] = 5
      stopVal [duration (s)] = 5
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    SoundComponent sound_3
      sound = 880
      startVal [time (s)] = 10
      stopVal [duration (s)] = 5
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    SoundComponent sound_4
      sound = 1100
      startVal [time (s)] = 15
      stopVal [duration (s)] = 5
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Flow
  Routine Stress_Screen
  Routine Blank_Screen
  Routine Part_One
  Routine Blank_Screen
  Routine Part_One_Instructions
  Routine Blank_Screen
  LoopInitiator tick loopType="TrialHandler"
    conditionsFile = ..\Resources\StimuliFiles\metronome.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Tick', 1), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 2), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 3), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 4), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 5), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 6), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 7), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 8), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 9), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 10), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 11), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 12), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 13), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 14), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 15), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 16), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 17), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)]),
      OrderedDict([('Tick', 18), ('Color', 'green'), ('Tone', 440), ('TimeDur', 1.0)])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
    Routine Part_One_Measurement
    Routine Metronome_Tick
  LoopTerminator tick
  Routine Part_One_Meas_Stop
  Routine Stress_Evaluation_One
  Routine Blank_Screen
  Routine Stress_Evaluation_Two
  Routine Blank_Screen
  Routine Part_One_End
  Routine Blank_Screen
  Routine Part_Two
  Routine Blank_Screen
  Routine Part_Two_Instructions
  Routine Blank_Screen
  Routine Color_Instructions
  Routine Blank_Screen
  LoopInitiator stroop_trials loopType="TrialHandler"
    conditionsFile = ..\Resources\StimuliFiles\stroop_stimuli - german.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordItem', 'rot'), ('WordColor', 'blau'), ('AnsLeft', 'rot'), ('AnsRight', 'blau'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'gruen'), ('AnsLeft', 'rot'), ('AnsRight', 'gruen'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'magenta'), ('AnsLeft', 'rot'), ('AnsRight', 'magenta'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'cyan'), ('AnsLeft', 'rot'), ('AnsRight', 'cyan'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'gelb'), ('AnsLeft', 'rot'), ('AnsRight', 'gelb'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'orange'), ('AnsLeft', 'rot'), ('AnsRight', 'orange'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'lila'), ('AnsLeft', 'rot'), ('AnsRight', 'lila'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'braun'), ('AnsLeft', 'rot'), ('AnsRight', 'braun'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'weiß'), ('AnsLeft', 'rot'), ('AnsRight', 'weiß'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'rot'), ('WordColor', 'schwarz'), ('AnsLeft', 'rot'), ('AnsRight', 'schwarz'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'blau'), ('WordColor', 'gruen'), ('AnsLeft', 'blau'), ('AnsRight', 'gruen'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'blau'), ('WordColor', 'magenta'), ('AnsLeft', 'blau'), ('AnsRight', 'magenta'), ('AnsCorr', 'right')])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
    Routine Part_Two_Measurement
    Routine Blank_Screen
  LoopTerminator stroop_trials
  Routine Part_Two_Meas_Stop
  Routine Stress_Evaluation_One
  Routine Blank_Screen
  Routine Stress_Evaluation_Two
  Routine Blank_Screen
  Routine Part_Two_End
  Routine Blank_Screen
  Routine Cooldown_Screen
  Routine Blank_Screen
  Routine Cooldown_Instructions
  Routine Blank_Screen
  Routine Countdown_Screen_10
  Routine Blank_Screen
  Routine Cooldown_Measurement
  Routine Blank_Screen
  Routine Stress_Evaluation_One
  Routine Blank_Screen
  Routine Stress_End
