PsychoPy2experiment version="3.1.3"
Settings
  Experiment info = {'participant': '', 'session': '001', 'startTime': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[0.8,0.8,0.8]
  expName = MTEC_paradigm
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Routines
  Routine Welcome_Screen
    TextComponent text_welcome_screen
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
          Welcome
             to the
        Experiment
    KeyboardComponent key_resp_welcome_screen
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent text_instructions_welcome_screen
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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  Routine Blank_Screen
    TextComponent text_blank_screen
      disabled = True
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Baseline_Screen
    TextComponent text_baseline_screen
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
            Baseline
        Measurement
    TextComponent text_baseline_screen_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Segment One:
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  Routine Baseline_Measurement
    TextComponent text_baseline_measurement
      color = black
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine Baseline_End
    TextComponent text_baseline_end
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Segment One.
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    TextComponent text_baseline_end_instructions
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_baseline_end
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Baseline_Instructions
    TextComponent text_baseline_instructions
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Please try to relax.

        The Measurement will
        start shortly.
    TextComponent text_baseline_countdown
      color = black
      letterHeight = 0.2
      saveStartStop = False
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 10
      text [set every frame] = $str(round(routineTimer.getTime(),0)) 
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    TextComponent text_baseline_instructions_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Instructions:
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  Routine Stress_Screen
    TextComponent text_stress_screen_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Segment Two:
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    TextComponent text_stress_screen
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Stress Measurement
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  Routine Stress_Part_One_Instructions
    TextComponent text_stress_part_one_instructions_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_stress_part_one_instructions
      color = black
      letterHeight = 0.06
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Count down aloud from 700
        in steps of 7.
        Try to match the speed of the
        metronome dot.

        (Press 'Space' to start)
    KeyboardComponent key_resp_text_stress_part_one_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Stress_Part_Two_Instructions
    TextComponent text_part_two_instructions_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_part_two_instructions
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Choose the color of the word by using the arrow keys.

        (Press 'Space' to start)
    KeyboardComponent key_resp_stress_part_two_instructions
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Stress_Part_One_Measurement
    PolygonComponent metronome
      fillColor [set every repeat] = $Color
      lineColor = black
      nVertices = 32
      saveStartStop = False
      shape = regular polygon...
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    SoundComponent sound_1
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      volume = 0.5
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  Routine Stress_Part_Two_Measurement
    TextComponent text_word_item
      color [set every repeat] = $WordColor
      letterHeight = 0.15
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $WordItem
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    TextComponent text_left_ans
      color = black
      letterHeight = 0.1
      pos = (-0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $AnsLeft
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    TextComponent text_right_ans
      color = black
      letterHeight = 0.1
      pos = (0.6, 0)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $AnsRight
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    KeyboardComponent key_resp_stress_part_two
      allowedKeys = 'left','right'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Stress_Part_One_End
    TextComponent text_part_one_end
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Part One.
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    TextComponent text_par_one_end_instructions
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_part_one_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Stress_Part_Two_End
    TextComponent text_stress_part_two_end
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending part two.
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    TextComponent text_stress_part_two_end_instructions
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_stress_part_two_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Metronom_Tic
    TextComponent text_metronom_tic
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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  Routine Stress_Part_One
    TextComponent text_stress_part_one_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Part One:
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    TextComponent text_stress_part_one
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = 7-Row
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  Routine Stress_Part_Two
    TextComponent text_part_two_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Part Two:
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    TextComponent text_part_two
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Stroop Test
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  Routine Stress_Evaluation
    TextComponent text_part_one_evaluation
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Task finished:
    RatingScaleComponent rating_stress_part_one
      forceEndRoutine = True
      high = 10
      labels = very easy, very hard
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_part_one_evaluation_2
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please rate the difficulty
               of the task.
  Routine Stress_Evaluation_2
    TextComponent text_part_two_evaluation
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Task finished:
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    TextComponent text_part_two_evaluation_2
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please rate the difficulty
               of the task.
    RatingScaleComponent rating_stress_part_two
      forceEndRoutine = True
      high = 10
      labels = very easy, very hard
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Baseline_Evaluation
    RatingScaleComponent rating_baseline
      forceEndRoutine = True
      high = 10
      labels = completely relaxed, stressed out
      low = 1
      markerStart = 5
      pos = 0, -0.4
      saveStartStop = False
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_baseline_evaluation_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Task finished:
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    TextComponent text_baseline_evaluation
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please enter your current
                stress level.
  Routine Emotion_Instructions_Pos
    TextComponent text_emotion_instruction_pos_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_emotion_instructions_pos
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please focus on the following
        pictures.

        You will have to rate each picture
        after it has been presented.

        (Press 'Space' to start)
    KeyboardComponent key_resp_emotion_instr_pos
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Emotion_Measurement_Pos
    ImageComponent image_emotion_meas_pos
      image [set every repeat] = $pictures
      size [set every repeat] = $(new_width, new_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine Emotion_Evaluation_Pos
    ImageComponent image_emotion_evaluation_pos
      image [set every repeat] = $pictures
      pos = (0, 0.2)
      size [set every repeat] = $(new_width*0.3, new_height*0.3)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_emotion_evaluation_pos
      forceEndRoutine = True
      high = 4
      labels = negative,positive
      low = 1
      markerStart = 2
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Cooldown_Screen
    TextComponent text_cooldown_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Intermission:
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    TextComponent text_cooldown
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Cooldown Phase
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  Routine Cooldown_Instructions
    TextComponent text_cooldown_instructions
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Please try to relax.

        The Measurement will
        start shortly.
    TextComponent text_cooldown_countdown
      color = black
      letterHeight = 0.2
      startVal [time (s)] = 5.5
      stopVal [duration (s)] = 10
      text [set every frame] = $str(round(routineTimer.getTime(),0)) 
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    TextComponent text_cooldown_instructions_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Instructions:
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  Routine Cooldown_Measurement
    TextComponent text_cooldown_measurement
      color = black
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = +
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  Routine Cooldown_Evaluation
    RatingScaleComponent rating_cooldown
      forceEndRoutine = True
      high = 10
      labels = completely relaxed, stressed out
      low = 1
      markerStart = 5
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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    TextComponent text_cooldown_evaluation_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Task finished:
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    TextComponent text_cooldown_evaluation
      color = black
      letterHeight = 0.075
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please enter your current
                stress level.
  Routine Cooldown_End
    TextComponent text_cooldown_end
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Ending Intermission.
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    TextComponent text_cooldown_end_instructions
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_cooldown_end
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Emotion_Screen_Pos
    TextComponent text_emotion_screen_pos_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Part One:
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    TextComponent text_emotion_pos_screen
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Positive
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  Routine Emotion_Screen_Neg
    TextComponent text_emotion_screen_neg_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Part Two:
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    TextComponent text_emotion_neg_screen
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Negative
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  Routine Emotion_Measurement_Neg
    ImageComponent image_emotion_meas_neg
      image [set every repeat] = $pictures
      size [set every repeat] = $(new_width, new_height)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 7
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  Routine Emotion_Instructions_Neg
    TextComponent text_emotion_instruction_neg_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Instructions:
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    TextComponent text_emotion_instructions_neg
      color = black
      letterHeight = 0.05
      saveStartStop = False
      startVal [time (s)] = 0.0
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      text:
        Please focus on the following
        pictures.

        You will have to rate each picture
        after it has been presented.

        (Press 'Space' to start)
    KeyboardComponent key_resp_emotion_instr_neg
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine Emotion_Evaluation_Neg
    ImageComponent image_emotion_evaluation_neg
      image [set every repeat] = $pictures
      pos = (0, 0.2)
      size [set every repeat] = $(new_width*0.3, new_height*0.3)
      startVal [time (s)] = 0.0
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    RatingScaleComponent rating_emotion_evaluation_neg
      forceEndRoutine = True
      high = 4
      labels = negative,positive
      low = 1
      markerStart = 3
      pos = 0, -0.4
      size = 1.0
      startVal [time (s)] = 0.0
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  Routine Emotion_Screen
    TextComponent text_emotion_screen_title
      color = black
      letterHeight = 0.04
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Segment Three:
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    TextComponent text_emotion_screen
      color = black
      letterHeight = 0.1
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
      text = Visual Stimulation Test
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  Routine Ending_Screen
    TextComponent text_ending_screen
      color = black
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        The End
    TextComponent text_ending_subtitle
      color = black
      letterHeight = 0.04
      pos = (0, -0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
      text = Thank you for participating!
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  Routine Color_Instructions
    PolygonComponent rec_red
      fillColor = $[1,0,0]
      lineColor = $[1,0,0]
      pos = (-0.8, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_magenta
      fillColor = $[1,0,1]
      lineColor = $[1,0,1]
      pos = (-0.6, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_orange
      fillColor = $[1,0.65,0]
      lineColor = $[1,0.65,0]
      pos = (-0.4, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_yellow
      fillColor = $[1,1,0]
      lineColor = $[1,1,0]
      pos = (-0.2, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_green
      fillColor = $[0,0.5,0]
      lineColor = $[0,0.5,0]
      pos = (0.0, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_red
      color = black
      letterHeight = 0.05
      pos = (-0.8, 0)
      startVal [time (s)] = 0.0
      text = red
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    TextComponent text_magenta
      color = black
      letterHeight = 0.05
      pos = (-0.6, 0)
      startVal [time (s)] = 0.0
      text = magenta
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    TextComponent text_orange
      color = black
      letterHeight = 0.05
      pos = (-0.4, 0)
      startVal [time (s)] = 0.0
      text = orange
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    TextComponent text_yellow
      color = black
      letterHeight = 0.05
      pos = (-0.2, 0)
      startVal [time (s)] = 0.0
      text = yellow
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    TextComponent text_green
      color = black
      letterHeight = 0.05
      pos = (0.0, 0)
      startVal [time (s)] = 0.0
      text = green
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    TextComponent text_continue
      color = black
      letterHeight = 0.05
      pos = (0, -0.4)
      startVal [time (s)] = 0.0
      text = (Press 'Space' to continue)
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    KeyboardComponent key_resp_colors
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent rec_blue
      fillColor = $[0,0,1]
      lineColor = $[0,0,1]
      pos = (0.4, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_cyan
      fillColor = $[0,1,1]
      lineColor = $[0,1,1]
      pos = (0.2, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_purple
      fillColor = $[0.5,0,0.5]
      lineColor = $[0.5,0,0.5]
      pos = (0.6, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    PolygonComponent rec_brown
      fillColor = $[0.65,0.17,0.17]
      lineColor = $[0.65,0.17,0.17]
      pos = (0.8, 0.1)
      shape = rectangle
      size = (0.1, 0.1)
      startVal [time (s)] = 0.0
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    TextComponent text_cyan
      color = black
      letterHeight = 0.05
      pos = (0.2, 0)
      startVal [time (s)] = 0.0
      text = cyan
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    TextComponent text_blue
      color = black
      letterHeight = 0.05
      pos = (0.4, 0)
      startVal [time (s)] = 0.0
      text = blue
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    TextComponent text_purple
      color = black
      letterHeight = 0.05
      pos = (0.6, 0)
      startVal [time (s)] = 0.0
      text = purple
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    TextComponent text_brown
      color = black
      letterHeight = 0.05
      pos = (0.8, 0)
      startVal [time (s)] = 0.0
      text = brown
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    TextComponent text_colors
      color = black
      letterHeight = 0.05
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Stroop Colors
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  Routine fix_screen
    TextComponent text_fix
      color = black
      letterHeight = 0.4
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = +
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Flow
  Routine Welcome_Screen
  Routine Blank_Screen
  Routine Baseline_Screen
  Routine Blank_Screen
  Routine Baseline_Instructions
  Routine Blank_Screen
  Routine Baseline_Measurement
  Routine Blank_Screen
  Routine Baseline_Evaluation
  Routine Blank_Screen
  Routine Baseline_End
  Routine Blank_Screen
  Routine Stress_Screen
  Routine Blank_Screen
  Routine Stress_Part_One
  Routine Blank_Screen
  Routine Stress_Part_One_Instructions
  Routine Blank_Screen
  LoopInitiator tick loopType="TrialHandler"
    Selected rows = 1:30
    conditionsFile = stimuli files\metronome.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('Tick', 1), ('Color', 'green')]),
      OrderedDict([('Tick', 2), ('Color', 'green')]),
      OrderedDict([('Tick', 3), ('Color', 'green')]),
      OrderedDict([('Tick', 4), ('Color', 'green')]),
      OrderedDict([('Tick', 5), ('Color', 'green')]),
      OrderedDict([('Tick', 6), ('Color', 'green')]),
      OrderedDict([('Tick', 7), ('Color', 'green')]),
      OrderedDict([('Tick', 8), ('Color', 'green')]),
      OrderedDict([('Tick', 9), ('Color', 'green')]),
      OrderedDict([('Tick', 10), ('Color', 'green')]),
      OrderedDict([('Tick', 11), ('Color', 'green')]),
      OrderedDict([('Tick', 12), ('Color', 'green')]),
      OrderedDict([('Tick', 13), ('Color', 'green')]),
      OrderedDict([('Tick', 14), ('Color', 'green')]),
      OrderedDict([('Tick', 15), ('Color', 'green')]),
      OrderedDict([('Tick', 16), ('Color', 'green')]),
      OrderedDict([('Tick', 17), ('Color', 'green')]),
      OrderedDict([('Tick', 18), ('Color', 'green')]),
      OrderedDict([('Tick', 19), ('Color', 'green')]),
      OrderedDict([('Tick', 20), ('Color', 'green')]),
      OrderedDict([('Tick', 21), ('Color', 'green')]),
      OrderedDict([('Tick', 22), ('Color', 'green')]),
      OrderedDict([('Tick', 23), ('Color', 'green')]),
      OrderedDict([('Tick', 24), ('Color', 'green')]),
      OrderedDict([('Tick', 25), ('Color', 'green')]),
      OrderedDict([('Tick', 26), ('Color', 'green')]),
      OrderedDict([('Tick', 27), ('Color', 'green')]),
      OrderedDict([('Tick', 28), ('Color', 'green')]),
      OrderedDict([('Tick', 29), ('Color', 'green')]),
      OrderedDict([('Tick', 30), ('Color', 'green')]),
      OrderedDict([('Tick', 31), ('Color', 'green')]),
      OrderedDict([('Tick', 32), ('Color', 'green')])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
    Routine Stress_Part_One_Measurement
    Routine Metronom_Tic
  LoopTerminator tick
  Routine Blank_Screen
  Routine Stress_Evaluation
  Routine Blank_Screen
  Routine Stress_Part_One_End
  Routine Blank_Screen
  Routine Stress_Part_Two
  Routine Blank_Screen
  Routine Stress_Part_Two_Instructions
  Routine Blank_Screen
  Routine Color_Instructions
  Routine Blank_Screen
  LoopInitiator stroop_trials loopType="TrialHandler"
    Selected rows = 1:10
    conditionsFile = stimuli files\stroop_stimuli.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('WordItem', 'red'), ('WordColor', 'blue'), ('AnsLeft', 'red'), ('AnsRight', 'blue'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'green'), ('AnsLeft', 'red'), ('AnsRight', 'green'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'magenta'), ('AnsLeft', 'red'), ('AnsRight', 'magenta'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'cyan'), ('AnsLeft', 'red'), ('AnsRight', 'cyan'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'yellow'), ('AnsLeft', 'red'), ('AnsRight', 'yellow'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'orange'), ('AnsLeft', 'red'), ('AnsRight', 'orange'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'purple'), ('AnsLeft', 'red'), ('AnsRight', 'purple'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'brown'), ('AnsLeft', 'red'), ('AnsRight', 'brown'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'grey'), ('AnsLeft', 'red'), ('AnsRight', 'grey'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'red'), ('WordColor', 'black'), ('AnsLeft', 'red'), ('AnsRight', 'black'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'blue'), ('WordColor', 'green'), ('AnsLeft', 'blue'), ('AnsRight', 'green'), ('AnsCorr', 'right')]),
      OrderedDict([('WordItem', 'blue'), ('WordColor', 'magenta'), ('AnsLeft', 'blue'), ('AnsRight', 'magenta'), ('AnsCorr', 'right')])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
    Routine Stress_Part_Two_Measurement
    Routine Blank_Screen
  LoopTerminator stroop_trials
  Routine Blank_Screen
  Routine Stress_Evaluation_2
  Routine Blank_Screen
  Routine Stress_Part_Two_End
  Routine Blank_Screen
  Routine Cooldown_Screen
  Routine Blank_Screen
  Routine Cooldown_Instructions
  Routine Blank_Screen
  Routine Cooldown_Measurement
  Routine Blank_Screen
  Routine Cooldown_Evaluation
  Routine Blank_Screen
  Routine Cooldown_End
  Routine Blank_Screen
  Routine Emotion_Screen
  Routine Blank_Screen
  Routine Emotion_Screen_Pos
  Routine Blank_Screen
  Routine Emotion_Instructions_Pos
  Routine Blank_Screen
  LoopInitiator emotion_trials_pos loopType="TrialHandler"
    conditionsFile = stimuli files\picture_list_pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1440), ('description', 'seal'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1440.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1460), ('description', 'tiger cub'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1460.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1463), ('description', 'group of cats'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1463.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1710), ('description', 'three dogs'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1710.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')])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
    Routine Emotion_Measurement_Pos
    Routine Blank_Screen
    Routine fix_screen
    Routine Blank_Screen
  LoopTerminator emotion_trials_pos
  Routine Blank_Screen
  LoopInitiator emotion_evaluation_pos loopType="TrialHandler"
    conditionsFile = stimuli files\picture_list_pos.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1440), ('description', 'seal'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1440.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1460), ('description', 'tiger cub'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1460.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1463), ('description', 'group of cats'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1463.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Positive\\'), ('name', 1710), ('description', 'three dogs'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Positive\\1710.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')])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
    Routine Emotion_Evaluation_Pos
    Routine Blank_Screen
  LoopTerminator emotion_evaluation_pos
  Routine Blank_Screen
  Routine Cooldown_Screen
  Routine Blank_Screen
  Routine Cooldown_Instructions
  Routine Blank_Screen
  Routine Cooldown_Measurement
  Routine Blank_Screen
  Routine Cooldown_Evaluation
  Routine Blank_Screen
  Routine Cooldown_End
  Routine Blank_Screen
  Routine Emotion_Screen_Neg
  Routine Blank_Screen
  Routine Emotion_Instructions_Neg
  Routine Blank_Screen
  LoopInitiator emotion_trials_neg loopType="TrialHandler"
    conditionsFile = stimuli files\picture_list_neg.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1022.0), ('description', 'snake close up'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1022.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1240.0), ('description', 'spider'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1240.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1300.0), ('description', 'dog threat 1'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1300.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1302.0), ('description', ' dog threat 2'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1302.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')])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
    Routine Emotion_Measurement_Neg
    Routine Blank_Screen
    Routine fix_screen
    Routine Blank_Screen
  LoopTerminator emotion_trials_neg
  Routine Blank_Screen
  LoopInitiator emotion_evaluation_neg loopType="TrialHandler"
    conditionsFile = stimuli files\picture_list_neg.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1022.0), ('description', 'snake close up'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1022.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1240.0), ('description', 'spider'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1240.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1300.0), ('description', 'dog threat 1'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1300.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')]),
      OrderedDict([('path', 'resources\\pictures\\'), ('weight', 'Negative\\'), ('name', 1302.0), ('description', ' dog threat 2'), ('type', '.jpg'), ('pictures', 'resources\\pictures\\Negative\\1302.jpg'), ('pic_width', 1024), ('pic_height', 768), ('new_width', 1.9), ('new_height', 1), ('new_size', '(1.9, 1)')])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
    Routine Emotion_Evaluation_Neg
    Routine Blank_Screen
  LoopTerminator emotion_evaluation_neg
  Routine Blank_Screen
  Routine Cooldown_Screen
  Routine Blank_Screen
  Routine Cooldown_Instructions
  Routine Blank_Screen
  Routine Cooldown_Measurement
  Routine Blank_Screen
  Routine Cooldown_Evaluation
  Routine Blank_Screen
  Routine Cooldown_End
  Routine Blank_Screen
  Routine Ending_Screen
